PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=C1EI1MLP
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = imac
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = whitesmoke
  expName = PRp_v1
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instruction2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        PHASE 1: LEARN HOW TO NAVIGATE IN THE PICTURE WORLD

        You will now be instructed which actions to take in the picture world. Your goal is to learn which new picture you will arrive at after selecting a picture by clicking the corresponding number on your keyboard.

        NOTE: There will be a SECOND PHASE after this first phase, where you can use what you learned to win even more money!

        Press Space to continue
  Routine stage4
    ImageComponent image_3
      image [set every repeat] = $imagethree
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = choice4
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_15
      image [set every repeat] = $fourthchoice
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if fourthchoice=='left.png':
            image_15.pos = [-0.4,0.0]
        else:
            image_15.pos=[0.4,0.0]
  Routine stage3
    ImageComponent image_2
      image [set every repeat] = $imagetwo
      mask = none
      pos = (0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_14
      image [set every repeat] = $thirdchoice
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if thirdchoice=='left.png':
            image_14.pos = [-0.4,0.0]
        else:
            image_14.pos=[0.4,0.0]
  Routine stage2
    ImageComponent image
      image [set every repeat] = $stage1
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if secondchoice=='left.png':
            image_13.pos = [-0.4,0.0]
        else:
            image_13.pos=[0.4,0.0]
  Routine stage1
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if action1==1:
            text_3.pos = [-0.4,-0.2]
        elif action1==9:
            text_3.pos=[0.4,-0.2]

        if (trial_learning_num+1)%28==0:
            learning_reward_goal=learning_reward_goal_list[counter_reward_learning]
            print(learning_reward_goal)
            counter_reward_learning+=1
    KeyboardComponent click_action
      allowedKeys [set every repeat] = '1','9'
      correctAns = $action1
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 6.8
      store = first key
      storeCorrect = True
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    TextComponent text_9
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Choose the number below the image:
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    ImageComponent trident_start_learning
      image [set every repeat] = $s1_image
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      pos [set every repeat] = (0.0,-0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $action1
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  Routine final
    ImageComponent image_4
      image [set every repeat] = $imagethree
      mask = none
      pos = (0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = Next Trial...
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  Routine instructions
    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        In this task, you will learn how to navigate a picture game. Each time you navigate in the game, you have two choices to make. Each choice you make will take you from one picture to another.

        For example, you might need to learn how often you see an apple after starting at an image of a tree.

        Thus, this task requires you to learn probabilities of image transitions. The probability of seeing an apple after a tree might be very different from the probability of seeing the apple after a rock.

        After this learning phase, you can use this knowledge to plan how to win points in a final phase. Importantly, you can earn money based on these points. You will be instructed later exactly how to win points.

        Press Space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions3
    TextComponent text_7
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Press SPACE to start learning!
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        quiz1list=['apple.png','trident.png','fireworks.png','fox.png','bowling.png']
        quiz2list=['window.png','bell.png','tree.png','watch.png']
        q1left_correct=['1','3','5','2','7']
        q1right_correct=['2','4','7','3','8']
        q2left_correct=['5','1','6','2']
        q2right_correct=['6','3','5','4']

        learning_reward_goal_list=learning_reward_goal_list=['snorkel.png','tophat.png','houses.png','north.png','train.png','hammer.png','apple.png','window.png','compass.png','tophat.png','snorkel.png','train.png','north.png','hammer.png','apple.png','houses.png','compass.png','window.png']
        counter_reward_learning=0
        learning_reward_goal=learning_reward_goal_list[0]
        msg_new='lost'
        action_list=['left.png','right.png']
        quiz_counter=0
        num_quiz_trials=10
        stage2=['bell.png','watch.png','watch.png','fox.png','fireworks.png','watch.png','tree.png','bowling.png']
        stage3=['houses.png','train.png','thermometer.png','compass.png','north.png','microphone.png','tophat.png','snorkel.png']
        quizzes=[quiz1list,quiz2list]
        predictions1=[stage2,stage2,stage3,stage3,stage3]
        predictions2=[stage2,stage3,stage3,stage3]
        predictions=[predictions1,predictions2]
        trials_with_three=[11,12,13,14,15,16]
        trials_with_four=[17,18]

        incorrect_actions=0
        action='left.png'

        trial_learning_num=0


        correct_quiz='p'
        percent_correct=''
        text_correct=''
  Routine feedback1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if practice_answer.corr:
          msg="Correct!"
        else:
          msg="Wrong! Re-starting practice"
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine prediction1
    KeyboardComponent resp
      allowedKeys [set every repeat] = 'a','l'
      correctAns = $corr1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent apple
      image [set every repeat] = $d1a
      pos = (-0.4, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent trident
      image [set every repeat] = $d1b
      pos = (0.4, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_12
      color = black
      letterHeight = 0.1
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = L
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        if resp.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_33
      color = black
      letterHeight = 0.08
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = START
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    CodeComponent everyX
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_16
      image [set every repeat] = $quiz1
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if quiz1=='left.png':
            image_16.pos = [-0.25,0.35]
        else:
            image_16.pos=[0.25,0.35]
  Routine prediction2
    ImageComponent fox
      image [set every repeat] = $d2a
      pos = (-0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fireworks
      image [set every repeat] = $d2b
      pos = (0, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree
      image [set every repeat] = $d2c
      pos = (0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_15
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_16
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent resp2
      allowedKeys [set every repeat] = 'a','g','l'
      correctAns = $corr2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_9
      image [set every repeat] = $imageone
      pos = (0.0, 0.35)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_17
      image [set every repeat] = $quiz2
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if quiz2=='left.png':
            image_17.pos = [-0.25,0.35]
        else:
            image_17.pos=[0.25,0.35]
  Routine prediction3
    ImageComponent unicorn
      image [set every repeat] = $d3a
      pos = (-0.6, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent pineapple
      image [set every repeat] = $d3b
      pos = (0, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent train
      image [set every repeat] = $d3c
      pos = (0.6, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.2)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_19
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_20
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent resp3
      allowedKeys [set every repeat] = 'a','g','l'
      correctAns = $corr3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_10
      image [set every repeat] = $imagetwo
      pos = (0, 0.35)
      size = (0.3, 0.3) 
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_18
      image [set every repeat] = $quiz3
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if quiz3=='left.png':
            image_18.pos = [-0.25,0.35]
        else:
            image_18.pos=[0.25,0.35]
  Routine prediction4
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if trial_learning_num%28==0:
            continueRoutine=True

        else:
            continueRoutine=False

        number_correct=0
    TextComponent outcome4
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose what most likley gets you to the following image
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    ImageComponent picture_reward_goal
      image [set every repeat] = $learning_reward_goal
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4
      allowedKeys [set every repeat] = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent learning_rew_trident
      image = trident.png
      pos = (-0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent learning_rew_planet
      image = planet.png
      pos = (0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = black
      letterHeight = 0.07
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_85
      color = black
      letterHeight = 0.07
      pos = (0.25, -0.30)
      startVal [time (s)] = 0.0
      text = 9
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  Routine stage2_quiz
    ImageComponent image_5
      image [set every repeat] = $imageone
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if resp.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_34
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine stage3_quiz
    ImageComponent image_6
      image [set every repeat] = $imagetwo
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if resp2.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_36
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine stage4_quiz
    ImageComponent image_7
      image [set every repeat] = $imagethree
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if resp3.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_35
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine final_stage_quiz
    ImageComponent image_8
      image [set every repeat] = $imagefour
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if resp4.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_37
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine memory_test
    TextComponent text_38
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reward Challenge: Get ready! 
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if rewarded=='yes':
            continueRoutine=False
        else:
            continueRoutine=True

        number_correct=0
  Routine take_a_break
    TextComponent text_39
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = Next trial…
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  Routine stage1_instructions
    KeyboardComponent keyboard_entry_instr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent start_instr1
      color = black
      letterHeight = 0.075
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent trident_start
      image = trident.png
      pos = (-0.4, -0.10)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent planet_start
      image = planet.png
      pos = (0.4, -0.10)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent instructions_decisionrules
      color = black
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
      text = The first decision will say “START”. 1 takes you from TRIDENT to a new image. 9 takes you from PLANET to a new image.
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    TextComponent space_continue_instr1
      color = black
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press Space to continue
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    TextComponent one
      color = black
      letterHeight = 0.1
      pos = (-0.4, -0.26)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent nine
      color = black
      letterHeight = 0.1
      pos = (0.4, -0.26)
      startVal [time (s)] = 0.0
      text = 9
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  Routine stage2_4_instructions
    KeyboardComponent responseleft
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        After choosing the trident or the planet, you will arrive at a new image. Then you will take a SECOND ACTION to see a final, third image.

        Your goal is to remember which images tend to come after acting at a specific starting image. For instance, what image tends to most often come after clicking 1 at trident?

        To show you what this looks like, you will do a practice round.

        Press SPACE to continue
  Routine stage_2_4_practice
    ImageComponent image_22
      image [set every repeat] = apple.png
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 1,'1'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent text_40
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 1
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  Routine stage_2_4_practice_result
    ImageComponent image_20
      image [set every repeat] = $image_prac1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_76
      color = black
      letterHeight = 0.055
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 1.5
      text = Moving to next image…
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    ImageComponent image_12
      image [set every repeat] = $image_prac2
      size = (0.5, 0.5)
      startVal [time (s)] = 3.2
      stopVal [duration (s)] = 1.5
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    TextComponent text_77
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 4.8
      stopVal [duration (s)] = 1.0
      text = Done trial!
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  Routine quiz_practice
    ImageComponent basket_2
      image = basket.png
      pos = (-0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fireworks_2
      image = fireworks.png
      pos = (0, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree_2
      image [set every repeat] = tree.png
      pos = (0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_21
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_27
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent practice_answer
      allowedKeys = 'a','g','l'
      correctAns = a
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_21
      Code Type = Auto->JS
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      End Routine:
        if practice_answer.corr:
            print('correct answer')
            practice_loop.finished = True
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Which image below did you see most often after clicking 1 at the apple image?
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  Routine quiz_score
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        if trial_learning_num%28==0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_5
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = You will see the correct score at the end of the game
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  Routine instructions_reward_stage
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent instructions_rewardstage
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Now it’s time to use what you learned to get rewards. Each time you enter the picture world to win money, you will be told which images will give you points!

        You need to use this information plan and choose the sequence of TWO ACTIONS that’s most likely to get you points. You can choose them in forwards or backwards order depending on the direction in which you plan.

        Press Space to continue
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine i2_reward
    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_42
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        IMPORTANT: After you plan and enter 2 ACTIONS to get to images to try to win points, you will not see any more images aftewards. This prevents you from learning anything else at this phase, as you need to use what you already learned to plan accordingly. The computer will simulate which images you reached and calculate your points, but this will not be shown to you. Instead you will be told how many points you won after this phase is over.

        Press Space to Continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_view_reward_info
    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    ImageComponent im1_example_choicephase
      image = watch.png
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4_2
      allowedKeys = 'space'
      correctAns = $corr4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent im2_example_choicephase
      image = tree.png
      pos = (0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase
      color = black
      letterHeight = 0.055
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = An Example Trial
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    TextComponent im1_rewvalue
      color = black
      letterHeight = 0.045
      pos = (-0.30, -0.2)
      startVal [time (s)] = 0.0
      text = Win 2 points!
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    TextComponent im2_rewvalue
      color = black
      letterHeight = 0.045
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = Win 10 points!
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    TextComponent text_28
      color = black
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine stages2_reward
    KeyboardComponent key_resp_13
      allowedKeys [set every repeat] = start_choice
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    TextComponent text_50
      color = black
      letterHeight = 0.12
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent image_21
      image [set every repeat] = $start
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        if start=='left.png':
            image_12.pos = [-0.29,0.0]
        else:
            image_12.pos=[0.29,0.0]
    ImageComponent applestart_4
      image [set every repeat] = $d1a
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tridentstart_4
      image [set every repeat] = $d1b
      pos = (0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine stage2_choice
    ImageComponent image_24
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_25
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_29
      Code Type = Auto->JS
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      End Routine:
        if resp_stage2.keys=='left':
            current_image=dictionary_outcomes[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_26
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine stage1_choice
    KeyboardComponent resp_stage1
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    TextComponent text_49
      color = black
      letterHeight = 0.075
      pos = (0,0.35)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent applestart_3
      image = apple.png
      pos = (-0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tridentstart_3
      image = trident.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_28
      Code Type = Auto->JS
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      End Routine:
        if resp_stage1.keys=='1':
            current_image='apple'
        elif resp_stage1.keys=='2':
            current_image='trident'
        elif resp_stage1.keys=='3':
            current_image='window'
    ImageComponent windowstart_3
      image = window.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_22
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_23
      color = black
      letterHeight = 0.1
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine stage1_information
    ImageComponent finalimage_2
      image [set every repeat] = $final_rewarded_1
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent upcoming_image_2
      image [set every repeat] = $upcoming_rewarded_1
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_45
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_46
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +2
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    TextComponent text_47
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = +10
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    TextComponent text_48
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        current_image='start'
    TextComponent text_56
      color = black
      letterHeight = 0.06
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_69
      color = black
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = START
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  Routine stage2_information
    ImageComponent finalimage_3
      image [set every repeat] = $final_rewarded_2
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent upcoming_image_3
      image [set every repeat] = $upcoming_rewarded_2
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent startingimage_3
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_53
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +2
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    TextComponent text_54
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +10
    TextComponent text_55
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    TextComponent text_44
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine stage3_information
    ImageComponent finalimage_4
      image [set every repeat] = $final_rewarded_3
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages_2
      allowedKeys [set every repeat] = 'space'
      correctAns = $corr4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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    ImageComponent upcoming_image_4
      image [set every repeat] = $upcoming_rewarded_3
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent startingimage_4
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_57
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_58
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +20
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    TextComponent text_59
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +60
    TextComponent text_60
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: All of the other 4 possible final images you end up at will TAKE AWAY 60 points from you!
      wrapWidth = 0.45
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    TextComponent text_51
      color = black
      letterHeight = 0.06
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine stage4_information
    ImageComponent finalimage_5
      image [set every repeat] = $final_rewarded_4
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent startingimage_5
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_61
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_63
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +10
    TextComponent text_64
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    TextComponent text_65
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine instructions_planning
    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_66
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        When you have decided how to plan your actions , you will input the sequence of 2 actions to get you to the images with points:

        For example, press 1 and then press 8.
    KeyboardComponent key_resp_12
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent text_24
      color = black
      letterHeight = 0.06
      pos = (0, -0.35)
      startVal [time (s)] = 1.5
      text = Press Space to Continue
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  Routine start_planning_trials
    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_67
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
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      text:
        You are now ready to start the task, using the knowledge you learned about how to navigate through the pictures. Good luck!

        Press Space to begin
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stage3_choice
    ImageComponent image_30
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_31
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_32
      Code Type = Auto->JS
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      End Routine:
        if resp_stage3.keys=='left':
            result=np.random.binomial(1,0.8)
            if result==1:
                current_image=dictionary_outcomes[current_image][0][0]
            else:
                current_image=dictionary_outcomes[current_image][0][0]
        elif resp_stage3.keys=='right':
            result=np.random.binomial(1,0.8)
            if result==1:
                current_image=dictionary_outcomes[current_image][1][0]
            else:
                current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_32
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine stage4_choice
    ImageComponent image_33
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_34
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_33
      Code Type = Auto->JS
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      End Routine:
        if resp_stage4.keys=='left':
            current_image=dictionary_outcomes[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_35
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine final_stage5
    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_68
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_30
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
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      text:
        You will find out your reward total after all this phase is completed.

        Press Space to Continue to Next Trial
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      store = nothing
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  Routine done
    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_62
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        Thank you for participating!

        You will be granted credit on Prolific within the next week.
  Routine transition_revaluation
    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = BONUS ROUND
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    TextComponent text_26
      color = black
      letterHeight = 0.04
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
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      text:
        The picture world you learned has CHANGED! Now, the TRIDENT leads only to the WATCH, and the PLANET leads only to the FOX. Look below and use this new information to win more money next!
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
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    ImageComponent trident_reval
      image = trident.png
      pos = (-0.2, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent watch_reval
      image = watch.png
      pos = (0.2, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent right_arrow
      image = right.png
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    ImageComponent planet_reval
      image = planet.png
      pos = (-0.2, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent right_arrow2
      image = right.png
      pos = (0, -0.25)
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    ImageComponent fox_reval
      image = fox.png
      pos = (0.2, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_94
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.5
      text = Press Space to continue
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  Routine result_quiz_instructions
    TextComponent result_q_instr
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $msg
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  Routine stag4_choice_transition_reval
    ImageComponent image_37
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage4_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_38
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_34
      Code Type = Auto->JS
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      End Routine:
        if resp_stage4.keys=='left':
            current_image=dictionary_outcomes_tr[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes_tr[current_image][1][0]
    ImageComponent image_39
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine instructions_quiz_1
    TextComponent text_43
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What is the goal of the picture game?

        a.to learn the type of picture

        b.to learn the meaning of pictures

        c.to learn which pictures you tend to see after making an initial choice at a starting image

        d.to learn how actions you take at a picture give you rewards or punishments
    CodeComponent code_27
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_17.keys=='c':
            correct+=1
    KeyboardComponent key_resp_17
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_2
    TextComponent text_70
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. How are the second and third images different from the first?

        a. these images are different every time

        b.these images are new every time

        c. you get to select actions at the second and see how you get to the third image.


        d. you take no actions at these images.
    CodeComponent code_30
      Code Type = Auto->JS
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      End Routine:
        if key_resp_18.keys=='c':
            correct+=1
    KeyboardComponent key_resp_18
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_3
    TextComponent text_71
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What happens during the reward quiz?

        a.you must recall how the pictures look

        b. you are told that a picture has money hiding in it, and you must choose the action that has the best chance of getting you there. 5 of these rounds the computer chooses AT RANDOM will determine how much money you win!

        c. you must recall images you most likely DO NOT see after taking an action at a starting image

        d. you are told that a picture has money hiding in it, and you must get those points regardess of how well you choose.
    CodeComponent code_31
      Code Type = Auto->JS
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      End Routine:
        if key_resp_19.keys=='b':
            correct+=1
    KeyboardComponent key_resp_19
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_4
    TextComponent text_72
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. Your goal is to learn the how likely a certain image (e.g., basket) comes after a starting image (e.g., apple). The probabilities that determine transitions between images:

        a. Change throughout the task, so the image that has the best chance to get you to the another image can CHANGE.

        b. NEVER CHANGE. Throughout the entire task, the probabilities that determine which image gets you to another image NEVER CHANGE.

        c. Are always 100%. If you want to get to the basket, there’s only one preceding image that could possibly get you there.

        d. Cannot be learned. The goal of the task is to guess which are the best images to get you to new images, because their probabilties are entirely random
    CodeComponent code_35
      Code Type = Auto->JS
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      End Routine:
        if key_resp_20.keys=='b':
            correct+=1

        if correct==4:
            instructions_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_20
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_5
    TextComponent text_73
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Instructions Quiz

        1. What is the goal of the picture game?


        a.
        b.
        c.
        d.
    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_17.resp=='c':
            correct+=1

        if correct==5:
            instructions_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_21
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reminder_second_phase
    TextComponent text_74
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        After you complete many rounds of learning how to navigate between pictures in the picture game, you will have a SECOND PHASE where you can earn more money based off what you learned!

        IMPORTANT to do well on both phases, it is vital to remember that during training, the image that leads the most times to another image NEVER CHANGES. For example, if in the beginning of the task, the apple image has the best chance to lead to the basket image, it will ALWAYS be the best image to get to the basket image. The probabilities between images are constant throughout the task.

        Press space for a quiz on the instructions
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine memory_quiz
    TextComponent text_75
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        During your learning about how to get from one picture to another, you will be tested on your learning.

        Every so often, you will be asked to use what you’ve learned to try to reach an image where money is hiding. Each of these questions has a correct answer, and we will reward you at the end of the study based on how well you did on these questions.

        Specifically, we will pick a total of 5 rounds at random from these rounds where you can earn reward to determine how much money you win

        Press space to continue
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning_trial_sequence
    ImageComponent stage1_learning
      image [set every repeat] = $s1_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_78
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 0.6
      text = Moving to next image…
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    ImageComponent stage2_learning
      image [set every repeat] = $s2_image
      size = (0.5, 0.5)
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 2.0
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  Routine stage1_choice_enact
    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_81
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press two actions in sequence:
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    KeyboardComponent key_resp_25
      allowedKeys = '1','9','2','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine info_choice_revaluation
    ImageComponent im1_example_choicephase_3
      image [set every repeat] = $r1
      pos = (-0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent im2_example_choicephase_3
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_3
      color = black
      letterHeight = 0.045
      pos = (-0.30, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_3
      color = black
      letterHeight = 0.045
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_32
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine info_choicephase
    CodeComponent code_43
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    ImageComponent im1_planning
      image [set every repeat] = $r1
      pos = (-0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning
      image [set every repeat] = $r2
      pos = (0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning
      color = black
      letterHeight = 0.045
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning
      color = black
      letterHeight = 0.045
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_29
      color = black
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent im3_planning
      image [set every repeat] = $r3
      pos = (-0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent im4_planning
      image [set every repeat] = $r4
      pos = (0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent im3_num_planning
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r3_num
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    TextComponent im4_num_planning
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r4_num
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  Routine reward_total
    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_84
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Congrats! Your bonus points will be calculated soon and delivered to you on Prolific!
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  Routine learning_transition_revaluation
    ImageComponent stage2_learning_2
      image [set every repeat] = $s2_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    TextComponent text_86
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.6
      text = Moving to the next image…
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    ImageComponent stage3_learning_2
      image [set every repeat] = $s3_image
      size = (0.5, 0.5)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = 2.0
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    TextComponent text_87
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = Done trial!
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  Routine start_transition_reval
    TextComponent text_41
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Click SPACE to learn the new transitions
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decision_phase_transition_revaluation
    TextComponent text_83
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = BONUS ROUND: Decision Phase
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    TextComponent text_88
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Now use what you JUST LEARNED to win money in the same way as you were instructed to plan and win money in the previous decision round.




        Press Space to continue to decision phase
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine incorrect_answer
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if click_action.corr:
            trial_learning_num+=1
            msg_incorrect='correct'
            action_selection.finished = True
            continueRoutine=False

        else:
            msg_incorrect='You clicked the wrong button! If you click the wrong button 5 times, the game will stop and you will NOT GET PAID because you failed to follow instructions!'
            incorrect_actions+=1
            continueRoutine=True
    TextComponent incorrect_display
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msg_incorrect
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  Routine consent
    ImageComponent image_11
      image [set every repeat] = consent1.png
      pos = (0, 0.05)
      size = (0.65, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click SPACE to Continue
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  Routine consent1
    ImageComponent image_13
      image [set every repeat] = consent2.png
      pos = (0, 0.1)
      size = (0.65, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next_2
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_90
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        I certify that I have read the informed consent and received the information to contact the investigators if necessary.

        Click ‘y’ for YES
        Click ’n’ for NO, and you will EXIT the study
    CodeComponent code_19
      Code Type = Auto->JS
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      End Routine:
        if consent1_next_2.keys=='n':
            psychoJS.quit()
  Routine long_break
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN%240==0 and trials.thisN!=0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_91
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text = Take a 1-minute break. The task will start automatically after 1 minute, so be ready! 
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  Routine memory_q
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        if trial_learning_num%28==0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_92
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Memory quiz question next. Pay Attention!
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  Routine info_choice_revaluation_2
    CodeComponent code_45
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    ImageComponent im1_planning_2
      image [set every repeat] = $r1
      pos = (-0.20, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning_2
      image [set every repeat] = $r2
      pos = (0.20, 0.0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning_2
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning_2
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_93
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine choices_rew_reval
    ImageComponent im1_planning_3
      image [set every repeat] = $r1
      pos = (-0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning_3
      image [set every repeat] = $r2
      pos = (0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning_3
      color = black
      letterHeight = 0.045
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning_3
      color = black
      letterHeight = 0.045
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_95
      color = black
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent im3_planning_2
      image [set every repeat] = $r3
      pos = (-0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent im4_planning_2
      image [set every repeat] = $r4
      pos = (0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent im3_num_planning_2
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r3_num
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    TextComponent im4_num_planning_2
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r4_num
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  Routine reward_reval_choice
    TextComponent text_96
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Make your decision
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    ImageComponent trident_choice
      image = trident.png
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent planet_choice
      image = planet.png
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_31
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent text_97
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      text = Press 1
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    TextComponent text_98
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      text = Press 9
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  Routine reward_reval_see
    TextComponent text_99
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_100
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
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      text:
        You will find out your reward total after all this phase is completed.

        Press Space to Continue to Next Trial
    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      store = nothing
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  Routine reward_revaluation_choice
    ImageComponent im1_planning_4
      image [set every repeat] = $r1
      pos = (-0.20, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning_4
      image [set every repeat] = $r2
      pos = (0.20, 0.0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning_4
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning_4
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_101
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_33
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine time_limit
    TextComponent text_102
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will have 7 SECONDS to click the arrow instructed on screen on each trial! If you fail to click within this time 5 times, you will be exited from the game without compensation. In order to avoid this, please make sure to do anything you need to complete now before starting the game, which will take around 80 minutes. Remember, you can earn more money once you start the game, so pay attention!

        Press space to continue to learning phase, and good luck!!!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final_stage_Tr
    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_103
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_104
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
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      text:
        You will find out your reward total after all this phase is completed.

        Press Space to Continue to Next Trial
    KeyboardComponent key_resp_34
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      store = nothing
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  Routine choice_transistion_reval
    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_105
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press two actions in sequence:
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    KeyboardComponent transition_reval_choice
      allowedKeys = '1','9','2','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine stage2_2
    KeyboardComponent click_action_2
      allowedKeys [set every repeat] = '2','8'
      correctAns = $action2
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 6.8
      store = first key
      storeCorrect = True
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    TextComponent text_108
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Choose the number below the image:
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    ImageComponent trident_start_learning_2
      image [set every repeat] = $s2_image
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent text_109
      color = black
      letterHeight = 0.07
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $action2
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  Routine learning_trial_step2_to_step3
    ImageComponent stage2_learning_3
      image [set every repeat] = $s3_image
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_53
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
            trials.finished = True
            continueRoutine=False
  Routine prediction5
    TextComponent outcome4_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose action 2 or 8 that gets you to image below:
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    ImageComponent picture_reward_goal_2
      image [set every repeat] = $image2
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4_3
      allowedKeys [set every repeat] = '2','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent learning_rew_trident_2
      image [set every repeat] = $image1
      pos = (0, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_80
      color = black
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = From this starting image above
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  Routine instructions_planning_2phase
    CodeComponent code_50
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent instructions_rewardstage_2
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        You can enter your two actions in a forward or backward direction. Forward would be first selecting 1 or 9 to get to planet and trident and then 2 or 8 to get to the final image.

        Backward would be the reverse: first 2 or 8 to get from the final to the second image, and the 1 or 9 to get back to your starting point at the trident or planet. This choice is up to you!

        Press Space to continue
    KeyboardComponent key_resp_35
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stage2_choice_enact
    CodeComponent code_54
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_82
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press two actions in sequence:
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    KeyboardComponent key_resp_36
      allowedKeys = '1','9','2','8'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine choice_transition2
    CodeComponent code_55
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_106
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press two actions in sequence:
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    KeyboardComponent transition_reval_choice_2
      allowedKeys = '1','9','2','8'
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  LoopInitiator instructions_get_right loopType="TrialHandler"
    loopType = random
    nReps = 500
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    Routine consent
    Routine consent1
    Routine instructions
    Routine instruction2
    Routine stage1_instructions
    Routine stage2_4_instructions
    LoopInitiator practice_loop loopType="TrialHandler"
      loopType = random
      nReps = 500
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      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = stage2_4_practice.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')]),
          OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')])]
        Routine stage_2_4_practice
        Routine stage_2_4_practice_result
      LoopTerminator trials_3
      Routine quiz_practice
      Routine feedback1
    LoopTerminator practice_loop
    Routine memory_quiz
    Routine reminder_second_phase
    Routine instructions_quiz_1
    Routine instructions_quiz_2
    Routine instructions_quiz_3
    Routine instructions_quiz_4
    Routine result_quiz_instructions
  LoopTerminator instructions_get_right
  Routine time_limit
  Routine instructions3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = new_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'bell.png'), ('s3_image', 'tophat.png'), ('action1', 1), ('action2', 8)]),
      OrderedDict([('s1_image', 'planet.png'), ('s2_image', 'bell.png'), ('s3_image', 'train.png'), ('action1', 9), ('action2', 2)]),
      OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'tree.png'), ('s3_image', 'snorkel.png'), ('action1', 1), ('action2', 8)]),
      OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'fox.png'), ('s3_image', 'hammer.png'), ('action1', 1), ('action2', 2)]),
      OrderedDict([('s1_image', 'planet.png'), ('s2_image', 'tree.png'), ('s3_image', 'snorkel.png'), ('action1', 9), ('action2', 8)]),
      OrderedDict([('s1_image', 'planet.png'), ('s2_image', 'bell.png'), ('s3_image', 'train.png'), ('action1', 9), ('action2', 2)]),
      OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'fox.png'), ('s3_image', 'hammer.png'), ('action1', 1), ('action2', 2)]),
      OrderedDict([('s1_image', 'planet.png'), ('s2_image', 'unicorn.png'), ('s3_image', 'window.png'), ('action1', 9), ('action2', 8)]),
      OrderedDict([('s1_image', 'planet.png'), ('s2_image', 'tree.png'), ('s3_image', 'north.png'), ('action1', 9), ('action2', 2)]),
      OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'fox.png'), ('s3_image', 'apple.png'), ('action1', 1), ('action2', 8)]),
      OrderedDict([('s1_image', 'trident.png'), ('s2_image', 'fox.png'), ('s3_image', 'apple.png'), ('action1', 1), ('action2', 8)])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
    LoopInitiator action_selection loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine stage1
      Routine incorrect_answer
    LoopTerminator action_selection
    Routine stage2_2
    Routine learning_trial_step2_to_step3
    Routine memory_q
    Routine prediction4
    Routine quiz_score
    Routine take_a_break
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = action2_loop.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image1', 'bell.png'), ('image2', 'train.png'), ('action2', 2)]),
      OrderedDict([('image1', 'tree.png'), ('image2', 'snorkel.png'), ('action2', 8)]),
      OrderedDict([('image1', 'unicorn.png'), ('image2', 'window.png'), ('action2', 2)]),
      OrderedDict([('image1', 'tree.png'), ('image2', 'north.png'), ('action2', 2)]),
      OrderedDict([('image1', 'bell.png'), ('image2', 'tophat.png'), ('action2', 8)]),
      OrderedDict([('image1', 'watch.png'), ('image2', 'houses.png'), ('action2', 2)]),
      OrderedDict([('image1', 'watch.png'), ('image2', 'compass.png'), ('action2', 8)]),
      OrderedDict([('image1', 'fox.png'), ('image2', 'hammer.png'), ('action2', 2)]),
      OrderedDict([('image1', 'fox.png'), ('image2', 'apple.png'), ('action2', 8)])]
    Routine prediction5
  LoopTerminator trials_2
  Routine instructions_reward_stage
  Routine instructions_planning_2phase
  Routine i2_reward
  Routine practice_view_reward_info
  Routine instructions_planning
  Routine start_planning_trials
  LoopInitiator PR_vs_SR loopType="TrialHandler"
    conditionsFile = new_choicephase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_num': 1, 'r1': 'tree.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 2, 'r1': 'north.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 3, 'r1': 'bell.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 4, 'r1': 'train.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 5, 'r1': 'snorkel.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 6, 'r1': 'tophat.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'r3': 'wm.png', 'r3_num': ' ', 'r4': 'wm.png', 'r4_num': ' ', 'r5': None, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'}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
    Routine info_choicephase
    Routine stage1_choice_enact
    Routine stage2_choice_enact
    Routine final_stage5
  LoopTerminator PR_vs_SR
  Routine transition_revaluation
  LoopInitiator transition_revaluation_round loopType="TrialHandler"
    conditionsFile = choicephase_afterevaluation.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_num': 11, 'r1': 'hammer.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'corr_quiz_ans': 2, 'type_trial_immediate_first': None},
      {'trial_num': 12, 'r1': 'apple.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'corr_quiz_ans': 2, 'type_trial_immediate_first': None},
      {'trial_num': 13, 'r1': 'houses.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'corr_quiz_ans': 2, 'type_trial_immediate_first': None},
      {'trial_num': 14, 'r1': 'compass.png', 'r1_num': 100, 'r2': 'wm.png', 'r2_num': ' ', 'corr_quiz_ans': 2, 'type_trial_immediate_first': None}]
    Routine info_choice_revaluation_2
    Routine choice_transistion_reval
    Routine choice_transition2
    Routine final_stage_Tr
  LoopTerminator transition_revaluation_round
  Routine reward_total
  Routine done
