PsychoPy2experiment version="2022.2.5"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=C1EI1MLP
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = imac
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = whitesmoke
  expName = PRp_v1
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instruction2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        PHASE 1: LEARN HOW TO NAVIGATE IN THE PICTURE WORLD

        You will be instructed which actions to take in the picture world. Your goal is to learn which new picture you will arrive at after selecting a picture by clicking the corresponding number on your keyboard.

        NOTE: There will be a SECOND PHASE after this first phase, where you can use what you learned to win even more money!

        Press Space to continue
  Routine stage4
    ImageComponent image_3
      image [set every repeat] = $imagethree
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = choice4
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_15
      image [set every repeat] = $fourthchoice
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if fourthchoice=='left.png':
            image_15.pos = [-0.4,0.0]
        else:
            image_15.pos=[0.4,0.0]
  Routine stage3
    ImageComponent image_2
      image [set every repeat] = $imagetwo
      mask = none
      pos = (0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_14
      image [set every repeat] = $thirdchoice
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if thirdchoice=='left.png':
            image_14.pos = [-0.4,0.0]
        else:
            image_14.pos=[0.4,0.0]
  Routine stage2
    ImageComponent image
      image [set every repeat] = $stage1
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if secondchoice=='left.png':
            image_13.pos = [-0.4,0.0]
        else:
            image_13.pos=[0.4,0.0]
  Routine stage1
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if (trial_learning_num+1)%29==0:
            learning_reward_goal=learning_reward_goal_list[counter_reward_learning]
            im1_memory=learning_reward_startingstate_list[counter_reward_learning][0]
            im2_memory=learning_reward_startingstate_list[counter_reward_learning][1]
            num1=learning_reward_startingstate_list[counter_reward_learning][2]
            num2=learning_reward_startingstate_list[counter_reward_learning][3]
            counter_reward_learning+=1
    KeyboardComponent click_action
      allowedKeys [set every repeat] = '1','2','3','4','5','6','7','8','9',1,2,3,4,5,6,7,8,9
      correctAns = $action1
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 6.8
      storeCorrect = True
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    TextComponent text_9
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text = Pay attention to IMAGE, Press Number
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    ImageComponent picture_image
      image [set every repeat] = $s1_image
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      text [set every repeat] = $action1
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  Routine final
    ImageComponent image_4
      image [set every repeat] = $imagethree
      mask = none
      pos = (0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = Next Trial...
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  Routine instructions
    TextComponent text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        You will learn how to navigate through pictures. Each round, have TWO CHOICES that take you from one picture to another.

        In the first part of this task you must learn how often other pictures tend to appear after starting at an initial picture. For example, you might need to learn how often you see an apple after starting at an image of a tree.

        Thus, this task requires you to learn probabilities of image transitions. The probability of seeing an apple after a tree might be very different from the probability of seeing the apple after a rock.

        After this learning phase, you can use this knowledge to plan how to win points in a final phase. Importantly, you can earn money based on these points. You will be instructed later exactly how to win points.

        Press Space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions3
    TextComponent text_7
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Remember how to get to ENDING images.

        EXAMPLE: Starting at APPLE, going to TREE, and clicking "A" might get you most often to TRAIN.

        Starting at CLOCK, going to WATCH, and clicking "A" might NOT get you to TRAIN often.

        Your goal is to LEARN the best routes (starting image, middle image, action) to ending images.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      store = nothing
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        quiz1list=['apple.png','trident.png','fireworks.png','fox.png','bowling.png']
        quiz2list=['window.png','bell.png','tree.png','watch.png']
        q1left_correct=['1','3','5','2','7']
        q1right_correct=['2','4','7','3','8']
        q2left_correct=['5','1','6','2']
        q2right_correct=['6','3','5','4']

        learning_reward_goal_list=['planet.png','planet.png','planet.png','trident.png','trident.png','planet.png','planet.png','trident.png','planet.png','trident.png','trident.png','trident.png','planet.png','planet.png','trident.png','planet.png','planet.png','trident.png']
        learning_reward_startingstate_list=[['train.png','hammer.png',2,7],
        ['compass.png','apple.png',5,6],
        ['snorkel.png','compass.png',1,5],
        ['apple.png','snorkel.png',6,1],
        ['compass.png','snorkel.png',5,1],
        ['train.png','compass.png',2,5],
        ['compass.png','train.png',5,2],
        ['apple.png','compass.png',6,5],
        ['train.png','hammer.png',2,7],
        ['snorkel.png','compass.png',1,5],
        ['train.png','compass.png',2,5],
        ['snorkel.png','hammer.png',1,7],
        ['north.png','hammer.png',3,7],
        ['apple.png','tophat.png',6,4],
        ['north.png','apple.png',3,6],
        ['train.png','apple.png',2,6],
        ['tophat.png','hammer.png',4,7],
        ['train.png','hammer.png',2,7]]
        im1_memory='train.png'
        im2_memory='hammer.png'
        num1=3
        num2=7
        counter_reward_learning=0
        learning_reward_goal=learning_reward_goal_list[0]
        msg_new='lost'
        action_list=['left.png','right.png']
        quiz_counter=0
        num_quiz_trials=10
        stage2=['bell.png','watch.png','watch.png','fox.png','fireworks.png','watch.png','tree.png','bowling.png']
        stage3=['houses.png','train.png','thermometer.png','compass.png','north.png','microphone.png','tophat.png','snorkel.png']
        quizzes=[quiz1list,quiz2list]
        predictions1=[stage2,stage2,stage3,stage3,stage3]
        predictions2=[stage2,stage3,stage3,stage3]
        predictions=[predictions1,predictions2]
        trials_with_three=[11,12,13,14,15,16]
        trials_with_four=[17,18]

        incorrect_actions=0
        action='left.png'

        trial_learning_num=0


        correct_quiz='p'
        percent_correct=''
        text_correct=''
    TextComponent text_119
      color = black
      letterHeight = 0.038
      pos = (0, -0.32)
      startVal [time (s)] = 5.0
      text = Press SPACE to continue
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  Routine feedback1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if practice_answer.corr:
          msg="Correct!"
        else:
          msg="Wrong! Re-starting practice"
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine prediction1
    KeyboardComponent resp
      allowedKeys [set every repeat] = 'a','l'
      correctAns = $corr1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent apple
      image [set every repeat] = $d1a
      pos = (-0.4, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent trident
      image [set every repeat] = $d1b
      pos = (0.4, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_12
      color = black
      letterHeight = 0.1
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = L
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        if resp.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_33
      color = black
      letterHeight = 0.08
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = START
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    CodeComponent everyX
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_16
      image [set every repeat] = $quiz1
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if quiz1=='left.png':
            image_16.pos = [-0.25,0.35]
        else:
            image_16.pos=[0.25,0.35]
  Routine prediction2
    ImageComponent fox
      image [set every repeat] = $d2a
      pos = (-0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fireworks
      image [set every repeat] = $d2b
      pos = (0, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree
      image [set every repeat] = $d2c
      pos = (0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_15
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_16
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent resp2
      allowedKeys [set every repeat] = 'a','g','l'
      correctAns = $corr2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_9
      image [set every repeat] = $imageone
      pos = (0.0, 0.35)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_17
      image [set every repeat] = $quiz2
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if quiz2=='left.png':
            image_17.pos = [-0.25,0.35]
        else:
            image_17.pos=[0.25,0.35]
  Routine prediction3
    ImageComponent unicorn
      image [set every repeat] = $d3a
      pos = (-0.6, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent pineapple
      image [set every repeat] = $d3b
      pos = (0, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent train
      image [set every repeat] = $d3c
      pos = (0.6, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.2)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_19
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_20
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent resp3
      allowedKeys [set every repeat] = 'a','g','l'
      correctAns = $corr3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_10
      image [set every repeat] = $imagetwo
      pos = (0, 0.35)
      size = (0.3, 0.3) 
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN%10!=0:
            continueRoutine=False
        else:
            continueRoutine=True
    ImageComponent image_18
      image [set every repeat] = $quiz3
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if quiz3=='left.png':
            image_18.pos = [-0.25,0.35]
        else:
            image_18.pos=[0.25,0.35]
  Routine prediction4
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%29)==0:
            continueRoutine=True

        else:
            continueRoutine=False

        number_correct=0
    TextComponent outcome4
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose NUMBER then LETTER to get here:
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    ImageComponent picture_reward_goal
      image [set every repeat] = $learning_reward_goal
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4
      allowedKeys [set every repeat] = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent memory_image1
      image [set every repeat] = $im1_memory
      pos = (-0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent memory_image2
      image [set every repeat] = $im2_memory
      pos = (0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = black
      letterHeight = 0.07
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num1
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    TextComponent text_85
      color = black
      letterHeight = 0.07
      pos = (0.25, -0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num2
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  Routine stage2_quiz
    ImageComponent image_5
      image [set every repeat] = $imageone
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if resp.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_34
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine stage3_quiz
    ImageComponent image_6
      image [set every repeat] = $imagetwo
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if resp2.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_36
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine stage4_quiz
    ImageComponent image_7
      image [set every repeat] = $imagethree
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if resp3.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_35
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine final_stage_quiz
    ImageComponent image_8
      image [set every repeat] = $imagefour
      mask = none
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if resp4.corr:
          msg="Correct! +1"
        else:
          msg="Wrong: -1"
    TextComponent text_37
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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  Routine memory_test
    TextComponent text_38
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Reward Challenge: Get ready! 
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if rewarded=='yes':
            continueRoutine=False
        else:
            continueRoutine=True

        number_correct=0
  Routine take_a_break
    TextComponent text_39
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = Next trial…
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  Routine stage1_instructions
    KeyboardComponent keyboard_entry_instr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent start_instr1
      color = black
      letterHeight = 0.075
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent trident_start
      image = trident.png
      pos = (0, -0.10)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent instructions_decisionrules
      color = black
      letterHeight = 0.04
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = The first decision will say “START”. Here will you select the number underneath the starting image to see where it leads you!
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    TextComponent space_continue_instr1
      color = black
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press Space to continue
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    TextComponent one
      color = black
      letterHeight = 0.1
      pos = (0, -0.26)
      startVal [time (s)] = 0.0
      text = 1
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  Routine stage2_4_instructions
    KeyboardComponent responseleft
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        After choosing the image, you will take a SECOND ACTION - clicking a LETTER on the keyboard. Your goal is to remember how to take combinations of images and action to get to FINAL GOAL IMAGES.

        To show you what this looks like, you will do a practice round. You will be tested to see if you remember which images come after the starting image. Good luck!

        Press SPACE to continue
  Routine stage_2_4_practice
    ImageComponent image_22
      image [set every repeat] = apple.png
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 1,'1'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent text_40
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press 1
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  Routine stage_2_4_practice_result
    ImageComponent image_20
      image [set every repeat] = $image_prac1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_76
      color = black
      letterHeight = 0.055
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 1.5
      text = Moving to next image…
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    ImageComponent image_12
      image [set every repeat] = $image_prac2
      size = (0.5, 0.5)
      startVal [time (s)] = 3.2
      stopVal [duration (s)] = 1.5
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    TextComponent text_77
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 4.8
      stopVal [duration (s)] = 1.0
      text = Done trial!
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  Routine quiz_practice
    ImageComponent basket_2
      image = basket.png
      pos = (-0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fireworks_2
      image = fireworks.png
      pos = (0, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree_2
      image [set every repeat] = tree.png
      pos = (0.6, -0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      color = black
      letterHeight = 0.1
      pos = (-0.6, -0.25)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent text_21
      color = black
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent text_27
      color = black
      letterHeight = 0.1
      pos = (0.6, -0.25)
      startVal [time (s)] = 0.0
      text = L
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    KeyboardComponent practice_answer
      allowedKeys = 'a','g','l'
      correctAns = a
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_21
      Code Type = Auto->JS
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      End Routine:
        if practice_answer.corr:
            print('correct answer')
            practice_loop.finished = True
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Which image below did you see most often after clicking 1 at the apple image?
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  Routine quiz_score
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%29)==0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_5
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = You will see the correct score at the end of the game
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  Routine instructions_reward_stage
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent instructions_rewardstage
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Now use what you learned to get reward. Each round you will be told if the planet or trident will give you points.

        You will always be shown two images to try to reach either the planet or trident. You must choose the best TWO ACTIONS to get you to reward.

        Press SPACE or MOVE ON in 20 SECONDS
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      store = nothing
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  Routine i2_reward
    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_42
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        After you select TWO ACTIONS from the starting images try to reach the trident or planet, you will not see any more images aftewards.

        This prevents you from learning anything else at this phase, as you need to use what you already learned to plan accordingly. The computer will simulate which images you reached and calculate your points, but this will not be shown to you. Instead you will be told how many points you won after this phase is over.

        Press Space or move on in 15 seconds
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
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  Routine practice_view_reward_info
    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    ImageComponent im1_example_choicephase
      image = watch.png
      pos = (-0.30, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent resp4_2
      allowedKeys = 'space'
      correctAns = $corr4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = nothing
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    ImageComponent im2_example_choicephase
      image = tree.png
      pos = (0.30, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent example_trial_choice_phase
      color = black
      letterHeight = 0.055
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = What two actions gets you to bottom image?
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    TextComponent im1_rewvalue
      color = black
      letterHeight = 0.045
      pos = (0, -0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Win 100 points!
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    TextComponent text_28
      color = black
      letterHeight = 0.03
      pos = (0, -0.32)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
      text = Press Space or MOVE ON in 10 seconds
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 9
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    ImageComponent image_19
      image = planet.png
      pos = (0, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine stages2_reward
    KeyboardComponent key_resp_13
      allowedKeys [set every repeat] = start_choice
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    TextComponent text_50
      color = black
      letterHeight = 0.12
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent image_21
      image [set every repeat] = $start
      pos [set every repeat] = (0, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        if start=='left.png':
            image_12.pos = [-0.29,0.0]
        else:
            image_12.pos=[0.29,0.0]
    ImageComponent applestart_4
      image [set every repeat] = $d1a
      pos = (-0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tridentstart_4
      image [set every repeat] = $d1b
      pos = (0.6, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine stage2_choice
    ImageComponent image_24
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_25
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_29
      Code Type = Auto->JS
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      End Routine:
        if resp_stage2.keys=='left':
            current_image=dictionary_outcomes[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_26
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine stage1_choice
    KeyboardComponent resp_stage1
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    TextComponent text_49
      color = black
      letterHeight = 0.075
      pos = (0,0.35)
      startVal [time (s)] = 0.0
      text = Start
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    ImageComponent applestart_3
      image = apple.png
      pos = (-0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tridentstart_3
      image = trident.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_28
      Code Type = Auto->JS
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      End Routine:
        if resp_stage1.keys=='1':
            current_image='apple'
        elif resp_stage1.keys=='2':
            current_image='trident'
        elif resp_stage1.keys=='3':
            current_image='window'
    ImageComponent windowstart_3
      image = window.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_22
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_23
      color = black
      letterHeight = 0.1
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine stage1_information
    ImageComponent finalimage_2
      image [set every repeat] = $final_rewarded_1
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent upcoming_image_2
      image [set every repeat] = $upcoming_rewarded_1
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_45
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_46
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +2
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    TextComponent text_47
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = +10
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    TextComponent text_48
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        current_image='start'
    TextComponent text_56
      color = black
      letterHeight = 0.06
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_69
      color = black
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = START
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  Routine stage2_information
    ImageComponent finalimage_3
      image [set every repeat] = $final_rewarded_2
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent upcoming_image_3
      image [set every repeat] = $upcoming_rewarded_2
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent startingimage_3
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_53
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +2
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    TextComponent text_54
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +10
    TextComponent text_55
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    TextComponent text_44
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine stage3_information
    ImageComponent finalimage_4
      image [set every repeat] = $final_rewarded_3
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages_2
      allowedKeys [set every repeat] = 'space'
      correctAns = $corr4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      storeCorrect = True
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    ImageComponent upcoming_image_4
      image [set every repeat] = $upcoming_rewarded_3
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent startingimage_4
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_57
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_58
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      text = +20
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    TextComponent text_59
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +60
    TextComponent text_60
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: All of the other 4 possible final images you end up at will TAKE AWAY 60 points from you!
      wrapWidth = 0.45
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    TextComponent text_51
      color = black
      letterHeight = 0.06
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine stage4_information
    ImageComponent finalimage_5
      image [set every repeat] = $final_rewarded_4
      pos = (0, -0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stages_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent startingimage_5
      image [set every repeat] = $current_image+'.png'
      pos = (0, 0.25)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent text_61
      color = black
      letterHeight = 0.045
      pos = (-0.35, 0.25)
      startVal [time (s)] = 0.0
      text = you are here
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    TextComponent text_63
      color = black
      letterHeight = 0.045
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        +10
    TextComponent text_64
      color = black
      letterHeight = 0.045
      pos = (0.45, -0.3)
      startVal [time (s)] = 0.0
      text = Remember: You will LOSE 10 points for all other final images you may end up at!
      wrapWidth = 0.45
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    TextComponent text_65
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press Space when you are ready
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  Routine instructions_planning
    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_66
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = When you have decided how to act after seeing all information, you will enter two action you think will get you to reward. You must select one of the two starting images as your first action:
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    ImageComponent houses_choice_practice
      image = watch.png
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    ImageComponent train_choice_practice
      image = tree.png
      pos = (-0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent text_24
      color = black
      letterHeight = 0.06
      pos = (0, -0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text = Moving on in 7 seconds
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  Routine start_planning_trials
    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_67
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You are now ready to start the planning task. If you reach certain images, you can win more money! Good luck!

        You have 15 SECONDS TO enter two actions for each question. You must answer all to get credit.


        Moving on in 10 seconds
  Routine stage3_choice
    ImageComponent image_30
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = nothing
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    ImageComponent image_31
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_32
      Code Type = Auto->JS
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      End Routine:
        if resp_stage3.keys=='left':
            result=np.random.binomial(1,0.8)
            if result==1:
                current_image=dictionary_outcomes[current_image][0][0]
            else:
                current_image=dictionary_outcomes[current_image][0][0]
        elif resp_stage3.keys=='right':
            result=np.random.binomial(1,0.8)
            if result==1:
                current_image=dictionary_outcomes[current_image][1][0]
            else:
                current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_32
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine stage4_choice
    ImageComponent image_33
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_34
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_33
      Code Type = Auto->JS
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      End Routine:
        if resp_stage4.keys=='left':
            current_image=dictionary_outcomes[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes[current_image][1][0]
    ImageComponent image_35
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine final_stage5
    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_68
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_30
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2
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      text:
        You will find out your reward total after all this phase is completed.

        Next trial begins in 2 seconds.
  Routine done
    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_62
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        Thank you for participating!

        You will be granted credit on Prolific within the next week.
  Routine transition_revaluation
    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Bonus Round
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    TextComponent text_26
      color = black
      letterHeight = 0.04
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = The picture world you learned has CHANGED! Now, the TREE leads only to the TRIDENT, and the FOX leads only to the PLANET. Look below and use this new information to win more money next!
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 17.5
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    ImageComponent tree_Reval
      image = tree.png
      pos = (-0.2, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent trident_reval
      image = trident.png
      pos = (0.2, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent right_arrow
      image = right.png
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent fox_reval
      image = fox.png
      pos = (-0.2, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent right_arrow2
      image = right.png
      pos = (0, -0.25)
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent planet_reval
      image = planet.png
      pos = (0.2, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_94
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 17.5
      text = Press Space or move on in 20 seconds
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  Routine result_quiz_instructions
    TextComponent result_q_instr
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $msg
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  Routine stag4_choice_transition_reval
    ImageComponent image_37
      image [set every repeat] = $current_image+'.png'
      mask = none
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_stage4_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
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    ImageComponent image_38
      image = left.png
      pos = (-0.4,0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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    CodeComponent code_34
      Code Type = Auto->JS
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      End Routine:
        if resp_stage4.keys=='left':
            current_image=dictionary_outcomes_tr[current_image][0][0]

        elif resp_stage2.keys=='right':
            current_image=dictionary_outcomes_tr[current_image][1][0]
    ImageComponent image_39
      image = right.png
      pos = (0.4, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
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  Routine instructions_quiz_1
    TextComponent text_43
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What is the goal of the picture game?

        a.to learn the type of picture

        b.to learn the meaning of pictures

        c.to learn which pictures you tend to see after making a choice at an image

        d.to learn how actions you take at a picture give you rewards or punishments
    CodeComponent code_27
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_17.keys=='c':
            correct+=1
    KeyboardComponent key_resp_17
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_2
    TextComponent text_70
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What happens at the second image you see?

        a. you cannot select an action

        b.these images are new and never repeat

        c. you need to learn which image comes after a specific action at the second image.

        d. you do not transition to a third image
    CodeComponent code_30
      Code Type = Auto->JS
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      End Routine:
        if key_resp_18.keys=='c':
            correct+=1
    KeyboardComponent key_resp_18
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_3
    TextComponent text_71
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. What is the reward quiz?

        a.you must recall how the pictures look

        b. you can use what you learned to reach images with points, which will give you possible bonus money

        c. you must recall all impossible image transitions.

        d. you cannot receive a bonus
    CodeComponent code_31
      Code Type = Auto->JS
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      End Routine:
        if key_resp_19.keys=='b':
            correct+=1
    KeyboardComponent key_resp_19
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_4
    TextComponent text_72
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
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      text:
        Instructions Quiz

        1. Your goal is to learn the how likely a certain image (like basket) comes after a starting image (like apple). The probabilities that determine transitions between images:

        a. Change throughout the task,

        b. stay the same throughout the task.

        c. are impossible to learn

        d. are told to you explicitly, so you don't have to learn them
    CodeComponent code_35
      Code Type = Auto->JS
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      End Routine:
        if key_resp_20.keys=='b':
            correct+=1

        if correct==4:
            instructions_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_20
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_quiz_5
    TextComponent text_73
      color = black
      letterHeight = 0.038
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Instructions Quiz

        1. What is the goal of the picture game?


        a.
        b.
        c.
        d.
    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        correct=0
        if key_resp_17.resp=='c':
            correct+=1

        if correct==5:
            instructions_get_right.finished = True
            msg='Correct! You can now move on'
        else:
            msg='Incorrect! You need to repeat the instructions.'
    KeyboardComponent key_resp_21
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reminder_second_phase
    TextComponent text_74
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        After you complete many rounds of learning, you will have a SECOND PHASE where you can earn more money based off what you learned!

        IMPORTANT to do well on both phases, it is vital to remember that during training, the image that leads the most times to another image NEVER CHANGES. For example, if in the beginning of the task, the apple image has the best chance to lead to the basket image, it will ALWAYS be the best image to get to the basket image. The probabilities between images are constant throughout the task.

        Press space for a quiz on the instructions
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine memory_quiz
    TextComponent text_75
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        When learning about how to get from one picture to another, you will be tested on your learning.

        Every so often, you will be asked to use what you’ve learned to try to reach an image where money is hiding. Each of these questions has a correct answer, and we will reward you at the end of the study based on how well you did on these questions.

        Specifically, we will pick a total of 5 rounds at random from these rounds where you can earn reward to determine how much money you win

        Press space to continue
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learning_trial_sequence
    ImageComponent stage2_learning
      image [set every repeat] = $s2_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
            trials.finished = True
            continueRoutine=False
  Routine stage1_choice_enact
    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_81
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Enter 2 actions: number first then letter
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    ImageComponent image1test
      image [set every repeat] = $r1
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent image2test
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_25
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 14.8
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    TextComponent text_31
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $a1
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    TextComponent text_82
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $a2
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    ImageComponent goal_image_a1
      image [set every repeat] = $r3
      pos = (0, -0.3)
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_122
      color = black
      letterHeight = 0.03
      pos = (0, -0.38)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = GET TO PLANET
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  Routine info_choice_revaluation
    ImageComponent im1_example_choicephase_3
      image [set every repeat] = $r1
      pos = (-0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent im2_example_choicephase_3
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_3
      color = black
      letterHeight = 0.045
      pos = (-0.30, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_3
      color = black
      letterHeight = 0.045
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_32
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine info_choicephase
    CodeComponent code_43
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    ImageComponent im1_planning
      image [set every repeat] = $r1
      pos = (-0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent im2_planning
      image [set every repeat] = $r2
      pos = (0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent example_trial_choice_phase_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Starting at these images, plan 2 acitons to get you to reward below
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    TextComponent im1_rewvalue_planning
      color = black
      letterHeight = 0.045
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning
      color = black
      letterHeight = 0.045
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $r2_num
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    TextComponent text_29
      color = black
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 14
      text = Press Space or move on in 15 seconds
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 14
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    ImageComponent goal_image
      image [set every repeat] = $r3
      pos = (0, -0.12)
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent im3_num_planning
      color = black
      letterHeight = 0.045
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $r3_num
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  Routine reward_total
    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_84
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Congrats! Your bonus points will be calculated soon and delivered to you on Prolific!
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  Routine learning_transition_revaluation
    ImageComponent stage2_learning_2
      image [set every repeat] = $s2_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    TextComponent text_86
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.6
      text = Moving to the next image…
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    ImageComponent stage3_learning_2
      image [set every repeat] = $s3_image
      size = (0.5, 0.5)
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = 2.0
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    TextComponent text_87
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = Done trial!
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  Routine start_transition_reval
    TextComponent text_41
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Click SPACE to learn the new transitions
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decision_phase_transition_revaluation
    TextComponent text_83
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = BONUS ROUND: Decision Phase
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    TextComponent text_88
      color = black
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Now use what you JUST LEARNED to win money in the same way as you were instructed to plan and win money in the previous decision round.




        Press Space to continue to decision phase
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine incorrect_answer
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if click_action.corr:
            trial_learning_num+=1
            msg_incorrect='correct'
            action_selection.finished = True
            continueRoutine=False

        else:
            msg_incorrect='You clicked the wrong button! If you click the wrong button 5 times, the game will stop and you will NOT GET PAID because you failed to follow instructions!'
            continueRoutine=True
    TextComponent incorrect_display
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msg_incorrect
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  Routine consent
    ImageComponent image_11
      image [set every repeat] = consent1.png
      pos = (0, 0.05)
      size = (0.65, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click SPACE to Continue
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  Routine consent1
    ImageComponent image_13
      image [set every repeat] = consent2.png
      pos = (0, 0.1)
      size = (0.65, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent consent1_next_2
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_90
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        I certify that I have read the informed consent and received the information to contact the investigators if necessary.

        Click ‘y’ for YES
        Click ’n’ for NO, and you will EXIT the study
    CodeComponent code_19
      Code Type = Auto->JS
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      End Routine:
        if consent1_next_2.keys=='n':
            psychoJS.quit()
  Routine long_break
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN%240==0 and trials.thisN!=0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_91
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text = Take a 1-minute break. The task will start automatically after 1 minute, so be ready! 
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  Routine memory_q
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%29)==0:
            continueRoutine=True
        else:
            continueRoutine=False

        number_correct=0
    TextComponent text_92
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Memory quiz: pay Attention!
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  Routine info_choice_revaluation_2
    CodeComponent code_45
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    ImageComponent im1_planning_2
      image [set every repeat] = $r1
      pos = (-0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent im2_planning_2
      image [set every repeat] = $r2
      pos = (0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent example_trial_choice_phase_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = What image gets to the BOTTOM goal more?
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    TextComponent im1_rewvalue_planning_2
      color = black
      letterHeight = 0.045
      pos = (0, -0.30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $r3_num
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    TextComponent text_93
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 18
      text = Press Space To Continue
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 18
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    ImageComponent goal_transition_reval
      image [set every repeat] = $r3
      pos = (0, -0.12)
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine choices_rew_reval
    ImageComponent im1_planning_3
      image [set every repeat] = $r1
      pos = (-0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning_3
      image [set every repeat] = $r2
      pos = (0.20, 0.15)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning_3
      color = black
      letterHeight = 0.045
      pos = (-0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning_3
      color = black
      letterHeight = 0.045
      pos = (0.20, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_95
      color = black
      letterHeight = 0.045
      pos = (0, -0.45)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent im3_planning_2
      image [set every repeat] = $r3
      pos = (-0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent im4_planning_2
      image [set every repeat] = $r4
      pos = (0.2, -0.20)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent im3_num_planning_2
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r3_num
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    TextComponent im4_num_planning_2
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r4_num
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  Routine reward_reval_choice
    TextComponent text_96
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Make your decision
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    ImageComponent trident_choice
      image = trident.png
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent planet_choice
      image = planet.png
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_31
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    TextComponent text_97
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      text = Press 1
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    TextComponent text_98
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      text = Press 9
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  Routine reward_reval_see
    TextComponent text_99
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_100
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
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      text:
        You will find out your reward total after all this phase is completed.

        Press Space to Continue to Next Trial
    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      store = nothing
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  Routine reward_revaluation_choice
    ImageComponent im1_planning_4
      image [set every repeat] = $r1
      pos = (-0.20, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent im2_planning_4
      image [set every repeat] = $r2
      pos = (0.20, 0.0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    TextComponent example_trial_choice_phase_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Reward information for upcoming trial:
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    TextComponent im1_rewvalue_planning_4
      color = black
      letterHeight = 0.045
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r1_num
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    TextComponent im2_rewvalue_planning_4
      color = black
      letterHeight = 0.045
      pos = (0.2, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $r2_num
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    TextComponent text_101
      color = black
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 2.0
      text = Press Space To Continue
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    KeyboardComponent key_resp_33
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine time_limit
    TextComponent text_102
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Yo have 7 seconds to answer! If you fail to do so 5 TIMES, you will be exited from the game without compensation. In order to avoid this, please make sure to take a break now before starting the game, which will take around 60 minutes. Remember, you can earn more money once you start the game, so pay attention!

        Press space
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final_stage_Tr
    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_103
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Computer simulating images to calculate reward…
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    TextComponent text_104
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 2
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      text:
        You will find out your reward total after all this phase is completed.

        Moving on in 2 seconds
  Routine choice_transistion_reval
    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_105
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Enter the best first action to take
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    ImageComponent trident_choice_3
      image [set every repeat] = $r1
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent planet_choice_3
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent transition_reval_choice
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 19.8
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    TextComponent text_106
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $a1
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    TextComponent text_107
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $a2
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  Routine stage2_2
    KeyboardComponent click_action_2
      allowedKeys [set every repeat] = 'a','v','k'
      correctAns = $action2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      storeCorrect = True
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    TextComponent text_78
      color = black
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      text = Press the letter you see below:
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    ImageComponent picture_image_2
      image [set every repeat] = $s2_image
      size = (0.35, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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    TextComponent text_80
      color = black
      letterHeight = 0.07
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 7
      text [set every repeat] = $action2
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  Routine learning_trial_sequence2
    ImageComponent stage2_learning_3
      image [set every repeat] = $s3_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_50
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
            trials.finished = True
            continueRoutine=False
  Routine action2_quiz
    TextComponent text_108
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = What action gets to this image? 
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    ImageComponent goal_actiontwoquiz
      image [set every repeat] = $goal_image
      pos = (0, 0.05)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'd','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent start_action2quiz
      image [set every repeat] = $start_image
      pos = (0, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    TextComponent text_109
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = From starting image above line
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  Routine stage2_choice_enact
    CodeComponent code_53
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                PR_vs_SR.finished=True
                continueRoutine=False
    TextComponent text_110
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Enter 2 actions: number first then letter
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    ImageComponent image1test_2
      image [set every repeat] = $r1
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent image2test_2
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_34
      allowedKeys = 'a','k','v'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 14.8
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    TextComponent text_111
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $a1
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    TextComponent text_112
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $a2
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    ImageComponent goal_image_a2_2
      image [set every repeat] = $r3
      pos = (0, -0.3)
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_a2_goal
      color = black
      letterHeight = 0.03
      pos = (0, -0.38)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = GET TO PLANET
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  Routine i3_reward
    CodeComponent code_54
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                continueRoutine=False
    TextComponent text_113
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Use what you learned to plan to reach images with points!

        To do so, choose the starting image most likely to get you to middle image most likely to get you to the final goal image.

        For example, if a starting image ONLY ends up at PLANET, and PLANET has points, choose that starting state, because it will get you there 100% of the time!

        Press Space or move on in 15 seconds
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
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  Routine choice_transition_reval2
    CodeComponent code_55
      Code Type = Auto->JS
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      Begin Routine:
        if incorrect_actions>4:
                transition_revaluation_round.finished=True
                continueRoutine=False
    TextComponent text_114
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Enter 2 actions to get from below images to reward image
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    ImageComponent trident_choice_4
      image [set every repeat] = $r1
      pos = (-0.30, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent planet_choice_4
      image [set every repeat] = $r2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent transition_reval_choice_2
      allowedKeys = '1','2','3','4','5','6','7','8','9',1,2,3,4,5,6,7,8,9
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 19.8
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    TextComponent text_115
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $a1
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    TextComponent text_116
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $a2
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  Routine a_num2_quiz
    TextComponent text_117
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = Best action to get to this image? 
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    ImageComponent goalimg1
      image [set every repeat] = $g1img1
      pos = (0, 0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent startimg1
      image [set every repeat] = $stimg1
      pos = (0, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    TextComponent text_118
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = From starting image above line
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  Routine prediction4_secondaction
    CodeComponent code_56
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%28)==0:
            continueRoutine=True

        else:
            continueRoutine=False

        number_correct=0
    TextComponent outcome4_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose LETTER most often gets you here:
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    ImageComponent picture_reward_goal_2
      image [set every repeat] = $learning_reward_goal
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4_3
      allowedKeys [set every repeat] = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine incorrect_aciton2
    CodeComponent code_57
      Code Type = Auto->JS
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      Begin Routine:
        if click_action_2.corr:
            msg_incorrect='correct'
            action_selection_two.finished = True
            continueRoutine=False

        else:
            msg_incorrect='You clicked the wrong button! If you click the wrong button 5 times, the game will stop and you will NOT GET PAID because you failed to follow instructions!'
            continueRoutine=True
    TextComponent incorrect_display_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $msg_incorrect
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  Routine prediction4_two
    CodeComponent code_58
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%29)==0:
            continueRoutine=True

        else:
            continueRoutine=False

        number_correct=0
    TextComponent outcome4_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose NUMBER then LETTER to get here:
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    ImageComponent picture_reward_goal_3
      image [set every repeat] = $learning_reward_goal
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4_4
      allowedKeys [set every repeat] = 'a','k','v'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent memory_image1_2
      image [set every repeat] = $im1_memory
      pos = (-0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent memory_image2_2
      image [set every repeat] = $im2_memory
      pos = (0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_120
      color = black
      letterHeight = 0.07
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num1
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    TextComponent text_121
      color = black
      letterHeight = 0.07
      pos = (0.25, -0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num2
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  Routine goal_image_a2
    CodeComponent code_59
      Code Type = Auto->JS
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      Begin Routine:
        if ((trial_learning_num)%28)==0:
            continueRoutine=True

        else:
            continueRoutine=False

        number_correct=0
    TextComponent outcome4_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
      text = Choose number below gets you most often to:
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    ImageComponent picture_reward_goal_4
      image [set every repeat] = $learning_reward_goal
      pos = (0, 0.17)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp4_5
      allowedKeys [set every repeat] = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent memory_image1_3
      image [set every repeat] = $im1_memory
      pos = (-0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent memory_image2_3
      image [set every repeat] = $im2_memory
      pos = (0.25, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_123
      color = black
      letterHeight = 0.07
      pos = (-0.25, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num1
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    TextComponent text_124
      color = black
      letterHeight = 0.07
      pos = (0.25, -0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $num2
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Flow
  LoopInitiator instructions_get_right loopType="TrialHandler"
    loopType = random
    nReps = 500
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    Routine consent
    Routine consent1
    Routine instructions
    Routine instruction2
    Routine stage1_instructions
    Routine stage2_4_instructions
    LoopInitiator practice_loop loopType="TrialHandler"
      loopType = random
      nReps = 500
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      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = stage2_4_practice.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')]),
          OrderedDict([('trials', 'planet.png'), ('image_prac1', 'planet.png'), ('image_prac2', 'basket.png')])]
        Routine stage_2_4_practice
        Routine stage_2_4_practice_result
      LoopTerminator trials_3
      Routine quiz_practice
      Routine feedback1
    LoopTerminator practice_loop
    Routine memory_quiz
    Routine reminder_second_phase
    Routine instructions_quiz_1
    Routine instructions_quiz_2
    Routine instructions_quiz_3
    Routine instructions_quiz_4
    Routine result_quiz_instructions
  LoopTerminator instructions_get_right
  Routine time_limit
  Routine instructions3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = easier_probability_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('s1_image', 'snorkel.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 1.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'hammer.png'), ('s2_image', 'fox.png'), ('s3_image', 'trident.png'), ('action1', 7.0), ('action2', 'k')]),
      OrderedDict([('s1_image', 'train.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 2.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'snorkel.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 1.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'apple.png'), ('s2_image', 'fox.png'), ('s3_image', 'trident.png'), ('action1', 6.0), ('action2', 'k')]),
      OrderedDict([('s1_image', 'snorkel.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 1.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'compass.png'), ('s2_image', 'watch.png'), ('s3_image', 'trident.png'), ('action1', 5.0), ('action2', 'k')]),
      OrderedDict([('s1_image', 'tophat.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 4.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'compass.png'), ('s2_image', 'watch.png'), ('s3_image', 'trident.png'), ('action1', 5.0), ('action2', 'k')]),
      OrderedDict([('s1_image', 'snorkel.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 1.0), ('action2', 'a')]),
      OrderedDict([('s1_image', 'compass.png'), ('s2_image', 'tree.png'), ('s3_image', 'planet.png'), ('action1', 5.0), ('action2', 'a')])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
    LoopInitiator action_selection loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine stage1
      Routine incorrect_answer
    LoopTerminator action_selection
    LoopInitiator action_selection_two loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine stage2_2
      Routine incorrect_aciton2
    LoopTerminator action_selection_two
    Routine learning_trial_sequence2
    Routine memory_q
    Routine prediction4
    Routine prediction4_two
    Routine quiz_score
    Routine take_a_break
  LoopTerminator trials
  Routine instructions_reward_stage
  Routine i2_reward
  Routine i3_reward
  Routine practice_view_reward_info
  Routine instructions_planning
  Routine start_planning_trials
  LoopInitiator PR_vs_SR loopType="TrialHandler"
    conditionsFile = new_choicephase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_num': 1, 'r1': 'train.png', 'r1_num': ' ', 'r2': 'compass.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 2, 'a2': 5, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 2, 'r1': 'compass.png', 'r1_num': ' ', 'r2': 'snorkel.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 5, 'a2': 1, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 3, 'r1': 'north.png', 'r1_num': ' ', 'r2': 'compass.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 3, 'a2': 5, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 4, 'r1': 'compass.png', 'r1_num': ' ', 'r2': 'tophat.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 5, 'a2': 4, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'PRvsSR'},
      {'trial_num': 7, 'r1': 'snorkel.png', 'r1_num': ' ', 'r2': 'hammer.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 1, 'a2': 7, 'r5_num': None, 'corr_quiz_ans': 1, 'type_trial_immediate_first': 'Brbias/RR'}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
    Routine info_choicephase
    Routine stage1_choice_enact
    Routine stage2_choice_enact
    Routine final_stage5
  LoopTerminator PR_vs_SR
  Routine transition_revaluation
  LoopInitiator transition_revaluation_round loopType="TrialHandler"
    conditionsFile = choicephase_afterevaluation.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_num': 11, 'r1': 'snorkel.png', 'r1_num': ' ', 'r2': 'hammer.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 1, 'a2': 7, 'r5_num': 1, 'corr_quiz_ans': 'TR', 'type_trial_immediate_first': None},
      {'trial_num': 12, 'r1': 'snorkel.png', 'r1_num': ' ', 'r2': 'apple.png', 'r2_num': ' ', 'r3': 'trident.png', 'r3_num': 'Get to TRIDENT for 100 points!', 'r4': 'wm.png', 'a1': 1, 'a2': 6, 'r5_num': 1, 'corr_quiz_ans': 'TR', 'type_trial_immediate_first': None},
      {'trial_num': 13, 'r1': 'hammer.png', 'r1_num': ' ', 'r2': 'train.png', 'r2_num': ' ', 'r3': 'trident.png', 'r3_num': 'Get to TRIDENT for 100 points!', 'r4': 'wm.png', 'a1': 7, 'a2': 2, 'r5_num': 1, 'corr_quiz_ans': 'TR', 'type_trial_immediate_first': None},
      {'trial_num': 14, 'r1': 'apple.png', 'r1_num': ' ', 'r2': 'train.png', 'r2_num': ' ', 'r3': 'planet.png', 'r3_num': 'Get to PLANET for 100 points!', 'r4': 'wm.png', 'a1': 6, 'a2': 2, 'r5_num': 1, 'corr_quiz_ans': 'TR', 'type_trial_immediate_first': None}]
    Routine info_choice_revaluation_2
    Routine choice_transistion_reval
    Routine final_stage_Tr
  LoopTerminator transition_revaluation_round
  Routine reward_total
  Routine done
